;hC CP with TMREV (TopSpin 2.3)

;Use cpd7 and cpd8 as TMREV and TMREV_180

;######################################################
;#                                                    #
;#                                                    #
;######################################################
;  
; Options DP, Cpre, CDC
; written W Trent Franks

;$COMMENT= HC CP with C DQ mixing
;$CLASS=Solids
;$DIM=2D
;$TYPE=Homonuclear
;$SUBTYPE=DQ mix
;$OWNER=guest

;prosol relations=<solids_cp>

;#include <Avancesolids.incl>
#include <C_detect_def.incl>

;######################################################
;#                   Define Mixing                    #
;######################################################

#include <fmp.TMREV.subr>
#include <fmp.DARR.subr>

;cnst11 : adjust t=0 for acq, if digmod = baseopt
"acqt0=1u*cnst11"

"in0=inf1"                  ;##########################
"d0=in0/2-0.3u-p1*2/3.14159";#   t1_init => 90,-180   #
"in30=inf1"                 ;#                        #
define loopcounter go_t1    ;#   No increment if 1D   #
"go_t1=td1"                 ;##########################

define delay ONTIME         ;##########################
define loopcounter T1evo    ;# Power Deposition Calcs #
"T1evo=larger(td1,cnst30)"  ;#   Constant Duty Cycle  #
"d30=T1evo*in30"            ;##########################
                            
                            ;##########################
;$EXTERN                    ;# python insertion point #
                            ;##########################

aqseq 312

Prepare, ze

"d30=d30/2"                 ;#divide by 2 for mc macro#
"ONTIME=aq+d0+d30+p10+p8"


;######################################################
;#               Protections: Pre-Check               #
;######################################################

#include <Standard_Prot.incl>
        ;acquisition, CP time, PDSD/DARR, and echo restrictions
#include <t1_prot.incl>
        ;check t1 evolution time
#include <ONTIME_prot.incl>
        ;total RF depsosition restriction

;######################################################
;#           Start of Active Pulse Program            #
;######################################################

;"l10=0"

Start, d1 do:H

  1m rpp30        ;#############################  
                  ;#  TMREV phases reset here  #
                  ;#############################
 
;######################################################
;#               Protections: In Situ                 #
;######################################################

; d0,d30 checked every row                            
#include <t1evol_prot.incl>

subr EVOL_TMREV(l10)
                            
#ifdef Cpre
 ; Carbon Presatuaration
 (p8 pl8 ph20):C
#endif

;######################################################
;#              Cross/Direct Polarization             #
;######################################################

#ifdef DP
   (p1 pl1 ph10):C
#else
                         (p3  pl2  ph1):H
  (p10:spf0 pl10 ph2):C  (p10 pl20 ph0):H 
#endif

;######################################################
;#            Heteronuclear TMREV recoupling          #
;##########################!###########################

subr TMREV_Carbon(ph3, l10)

if "go_t1>1"
{                           ;##########################
   d0 cpds2:H                ;#      t1 evolution      #
   0.3u do:H                 ;##########################
}

  (p1 pl1 ph4):C   (p1 pl2):H  ;store

#ifdef purge            
  subr DARRs6_(ph20)   ; soft 90 (s6) with option
#else
  subr PDSD_DARR()
#endif
  
  (p1 pl1 ph5):C   (p1 pl2):H  ;readout

0.3u cpds2:H 

;#######################################################
;#                     Acquisition                     #
;#######################################################

gosc ph31 	; Start ADC with ph31 signal routing

;#ifdef CDC
;  d30           ; Constant duty cycle
;#endif

1m do:H 	; Decoupler off

lo to Start times ns

;d1 mc #0 to Start F1QF(dp3) 
d1 mc #0 to Start F1PH(id0, ip4 & dd30)
                  F2QF(iu10, rd0 & rd4 & rd30)
                  
HaltAcqu, 1m
exit

;#######################################################
;#             Phase Cycle (min=4, full=16)            #
;#######################################################

ph0=  0
ph1=  1 1 3 3
ph2=  {0}*8 {2}*8
ph3=  0 1
ph4=  {0}*4 {2}*4
ph5=  0 0 1 1

ph10= {1 1 3 3}*2^2  ; X90 DP

;###################################################
;#                  TMREV Phases                   #
;###################################################

ph30= 3 0 2 1

ph31= {0 2 3 1}^2^2

;PARAMETERS:
;p1      : C 90  (pl1)
;p2      : C 180 (pl1)
;p3      : H 90  (pl2)
;p8      : C Presat (-DCpre)
;p10     : HC CP contact pl10 (C) and sp0 (H)
;sp0     : H CP pwr
;pl1     : C HP pwr level
;pl2     : H HP pwr level
;pl10    : C CP pwr
;pl12    : H dec pwr
;pl13    : H alt dec pwr (Spinlock and CW)
;pl17    : C POST-C7 pwr
;l7      : C7 repetitions n*7 (doubled)
;d1      : recycle delay
;C72mix  : mix time POST-C7 (half)
;pcpd2   : pulse length in decoupling sequence
;cpdprg2 : cw, tppm (at pl12), or lgs, cwlg. cwlgs (LG-decoupling 
;spnam0  : use e.g. ramp.100 for variable amplitude CP
;cnst30  : expected td1 for use in constant Duty (-DCDC)
;cnst31  : MAS Rate
;FnMode  : TPPI, States or States-TPPI
;zgoptns : (-D) D1, DP, CDC, Cpre
