;CC with DQ-SPC5 mixing and DQF (TopSpin 2.3)

;######################################################
;#                                                    #
;# SPC5(_2,_3)  DQ filtered  experiment               #
;#  SPC5_2  (Broadband)                               #
;#   M. Hohwy, C.M. Rienstra, C.P. Jaroniec, and      #
;#     R.G. Griffin J. Chem. Phys. 1999,110,7983-7992 #
;# SPC5_3  (Narrowband)                               #
;#   M. Hohwy, C. M. Rienstra, R. G. Griffin          #
;#     J. Chem. Phys. 2002, 117 4973-4987             #
;#                                                    #
;# Adjust for MAXIMUM                                 #
;#  pl15=10/3*wr (Default,SPC5_3) or 5*wr (SPC5_2)    #
;#  l5 is a multiple of 5                             #
;#                                                    #
;#                                                    #
;#CC with DQ-SPC5 mixing and DQF (TopSpin 2.3)
;#                                                    #
;#  pl15(SPC5_3)= 10/3*wr; l5 >= n*10 ; ns = n*4      #
;#  pl15(SPC5_2)= 5*wr; l5 >= n*10 ; ns = n*4         #
;#                                                    #
;#  Indirect Dimension phasing is 90,-180             #
;#                                                    #
;######################################################
;CC with DQ-SPC5 mixing and DQF (TopSpin 2.3)
;
; Options DP, SPC52, Cpre, CDC
; written Barth van Rossum and W. Trent Franks

;$COMMENT= HC CP with C DQ mixing
;$CLASS=Solids
;$DIM=3D
;$TYPE=Relaxation & Homonuclear
;$SUBTYPE=DQ mix
;$OWNER=guest

;prosol relations=<solids_cp>

;#include <Avancesolids.incl>
#include <C_detect_def.incl>

"d20=2s"

;######################################################
;#                   Define Mixing                    #
;#        SPC5_3 is Default, SPC5_2 with -DSPC52      #
;######################################################

#include <fmp.SPC5.subr>

;cnst11 : adjust t=0 for acq, if digmod = baseopt
"acqt0=1u*cnst11"

"in0=inf2"                  ;##########################
"d0=in0/2-0.3u-p1*2/3.14159";#   t1_init => 90,-180   #
"in30=inf2"                 ;#                        #
define loopcounter go_t2    ;#   No increment if 1D   #
"go_t2=td2"                 ;##########################

define delay ONTIME         ;##########################
define loopcounter T1evo    ;# Power Deposition Calcs #
"T1evo=larger(td1,cnst30)"  ;#   Constant Duty Cycle  #
"d30=T1evo*in30"            ;##########################
                            
                            ;##########################
;$EXTERN                    ;# python insertion point #
                            ;##########################

aqseq 321

Prepare, ze

"d30=d30/2"                 ;# divide by 2 for mc macro #
#ifdef SPC52
  "ONTIME=aq+d0+d30+p10+p8+2*SPC52mix"
#else
  "ONTIME=aq+d0+d30+p10+p8+2*SPC53mix"
#endif

;######################################################
;#               Protections: Pre-Check               #
;######################################################

#include <Standard_Prot.incl>
        ;acquisition, CP time, PDSD/DARR, and echo restrictions
#include <SPC5_prot.incl>
        ;loop l5 
#include <t1_prot.incl>
        ;check t1 evolution time
#include <ONTIME_prot.incl>
        ;total RF depsosition restriction

;######################################################
;#           Start of Active Pulse Program            #
;######################################################

Start, d1 do:H

  1m rpp15                  ;##########################  
  1m rpp16                  ;#  C5 phases reset here  #
  1m rpp25                  ;##########################
  1m rpp26
                            
;######################################################
;#               Protections: In Situ                 #
;######################################################

; d0,d30 checked every row                            
#include <t1evol_prot.incl> 
                            
#ifdef Cpre
 ; Carbon Presatuaration
 (p8 pl8 ph20):C
#endif

;######################################################
;#              Cross        Polarization             #
;######################################################

                         (p3  pl2  ph1):H
  (p10:spf0 pl10 ph2):C  (p10 pl20 ph0):H 
  
  (p1 pl1 ph3):C   (p1 pl2):H  ;to minus Z
 
  "d20 = vd" 
                            ;##########################
  d20                       ;#      T1 Relaxation     #
                            ;##########################
  
  (p1 pl1 ph4):C   (p1 pl2):H  ;excite

if "go_t2>1"
{                           ;##########################
  d0 cpds2:H                ;#      t1 evolution      #
  0.3u do:H                 ;##########################
}


;######################################################
;#           Homonuclear SPC5_(3,2) Mixing            #
;##########################!###########################
  
  (p1 pl1 ph5):C   (p1 pl2):H  ;store
  
#ifdef SPC52
  subr SPC5_2exc()
  subr SPC5_2rec_dq()
#else
  subr SPC5_3exc()
  subr SPC5_3rec_dq()
#endif

  (p1 pl1 ph6):C   (p1 pl2):H  ;store

  0.3u cpds2:H 
  
;#######################################################
;#                     Acquisition                     #
;#######################################################

gosc ph31 	; Start ADC with ph31 signal routing

#ifdef CDC
  d30           ; Constant duty cycle
#endif

1m do:H         ; Decoupler off

1m ip15*90
1m ip16*90      ; DQF, add 2 to rec phase every 2nd scan

lo to Start times ns

30m mc #0 to Start F1QF(ivd, rp4 & rd0 & rd30)
                   F2PH(ip4,id0 & dd30)

HaltAcqu, 1m
exit

;#######################################################
;#             Phase Cycle (min=4, full=16)            #
;#######################################################

ph0=  0
ph1=  1 1 3 3
ph2=  0
ph3=  3 3 3 3   3 3 3 3   1 1 1 1   1 1 1 1
ph4=  1
ph5=  3 3 3 3   1 1 1 1
ph6=  1

ph31= 0 2 2 0   2 0 0 2   2 0 0 2   0 2 2 0

;#######################################################
;#                    SPC5 Phases                      #
;#######################################################

ph15= (360) 90 162 234 306 18 270 342 54 126 198
ph16= (360) 270 342 54 126 198 90 162 234 306 18
ph25= (360) 0 72 144 216 288 180 252 324 36 108
ph26= (360) 180 252 324 36 108 0 72 144 216 288

;PARAMETERS:
;p1      : C 90  (pl1)
;p2      : C 180 (pl1)
;p3      : H 90  (pl2)
;p8      : C Presat (-DCpre)
;p10     : HC CP contact pl10 (C) and sp0 (H)
;sp0     : H CP pwr
;pl1     : C HP pwr
;pl2     : H HP pwr
;pl10    : C CP pwr
;pl12    : H dec pwr
;pl13    : H alt dec pwr (Spinlock and CW)
;pl15    : C SPC5 pwr (10/3wr if SPC53; 5wr if SPC52)
;pl16    : H DARR pwr (DARR = wr; PDSD =120 dB)
;l5      : SPC5 repetitions (doubled)
;d1      : recycle delay
;SPC52mix: SPC52 mix time (half)
;SPC53mix: SPC53 mix time (half)
;pcpd2   : pulse length in decoupling sequence
;cpdprg2 : cw, tppm (at pl12), or lgs, cwlg. cwlgs (LG-decoupling 
;spnam0  : use e.g. ramp.100 for variable amplitude CP
;cnst30  : expected td1 for use in constant Duty (-DCDC)
;cnst31  : MAS Rate
;FnMode  : TPPI, States or States-TPPI
;zgoptns : (-D) D1, DP, CDC, Cpre, SPC52

