;hCNhH Proton-Detect CP x-fer experiment (TopSpin 2.3)

;######################################################
;#                                                    #
;#  hCNhH 3D with H-H RFDR Mixing                     #
;#                                                    #
;######################################################
;
;$COMMENT= hCNhH Proton-Detect CP experiment
;$CLASS=Solids
;$DIM=3D
;$TYPE= 1H detect Hetero
;$SUBTYPE=CP Transfer
;$OWNER=guest
;
#include <HCN_defs.incl>
#include <D_defs.incl>
#include <Avance.incl> 
;for 2H decoupling

;######################################################
;#                Evolution Parameters                #
;######################################################

"in0=inf2"                  ;##########################
"d0=3u"                     ;#     t1_init => 0,0     #
"in30=inf2"                 ;##########################

"in10=inf1"                 ;##########################
"d10=in10/2-0.3u "          ;#   t2_init => 90,-180   #
"in29=inf1"                 ;##########################

#ifdef s180
"in10=in10/2"               ; for the soft pulse evolution
"d10=d10/2" 								
#endif

define loopcounter T1evo    ;############################
"T1evo=larger(td1,cnst29)"  ;#   Constant Duty Cycle  	#
"d29=TauR+T1evo*in29"       ;#                        	#
"d29=d29/2"                 ;# divide by 2 for mc macro #
define loopcounter T2evo    ;# Power Deposition Calcs 	#
"T2evo=larger(td2,cnst30)"  ;#                        	#
"d30=TauR+T2evo*in30"       ;############################
"d30=d30/2"                 ;# divide by 2 for mc macro #

define delay ONTIME

                            ;##########################
;$EXTERN                    ;# python insertion point #
                            ;##########################

aqseq 321

Prepare, ze

;######################################################
;#               Protections: Pre-Check               #
;######################################################

"ONTIME=aq+p3+p10+p1*2+p16+p11+p13+p21*2+d29+d30+d18"

#include <1H_ON_prot.incl>
        ;total RF depsosition restriction
	; Protections for Proton Presat, H Acq, etc
#include <t1_prot_v2.incl>
        ;check t1 evolution time
#include <t2_prot_v2.incl>
        ;check t1 evolution time
#include <fmp.HRFDR.subr>
        ;for mixing 

;######################################################
;#              2H decoupling setup                   #
;######################################################
  30m LOCKDEC_ON
  30m LOCKH_ON
  30m H2_PULSE

;######################################################
;#           Start of Active Pulse Program            #
;######################################################

Start, 30m do:C do:N d1 
; 1u fq=cnst10(bf hz):C			;reset carrier 

;######################################################
;#              2H lock                               #
;######################################################
  30m H2_LOCK
  30m LOCKH_OFF
  d1 
  30m LOCKH_ON
  30m H2_PULSE

;######################################################
;#               Protections: In Situ                 #
;######################################################

#include <t1evol_prot_v2.incl>
            ;check d0 and d30
#include <t2evol_prot_v2.incl>
            ;check d10 and d29

;######################
;#      PRESAT        #
;######################

#ifdef Pre
  3u pl18:H
  d18 cw:H ph20
  d13 do:H
#endif

;######################
;#      2H Dec       #
;######################
  0.5u pl5:D     ; WALTZ power on 2H
  1u  cpds5:D

;#####################
;#       HC CP       #
;#####################

                         (p3  pl2 ph1):H
  (p10:spf0 pl10 ph2):C  (p10 pl20 ph0):H 

;##########################
;#  Time evolution on Cx  #
;##########################

0.3u

1u cpds2:H
#ifdef s180
  (d10):N
;  1u fq=cnst11(bf hz):C	    ;hop to off res point
  (center
    (p8:spf8 pl28 ph13):C  
    (p21 pl21 ph20 p22 ph21 p21 ph20):N
  )
;  1u fq=cnst10(bf hz):C	    ;hop to off res point
  (p2 pl1 ph14):C
  (d10):N

#else 
if "d10 > (p21*2 + p22)"
{
  (center
    (d10):C
    (p21 pl21 ph20 p22 ph21 p21 ph20):N
  )
}

#endif
  1u
  (p1 pl1 ph3):C
  d29
  1u do:H
  (p1 pl1 ph4):C

;##########################
;#  	CN CP		  #
;##########################

 (p16:spf3 pl6 ph5):C (p16 pl13 ph1):H (p16:spf2 pl7 ph6):N  

0.3u


;##########################
;#  Time evolution on Nx  #
;##########################

 1u cpds2:H

if "d0 > (p1*2 + p2)"
{
  (center
    (d0):N
    (p1 pl1 ph20 p2 ph21 p1 ph20):C
  )
}

  1u
  (p21 pl21 ph7):N
  d30
  1u do:H


;###############
;# MISSISSIPPI #
;###############

  (p18 pl18 ph20):f1
  (p18 ph21):f1
  (p18 ph20):f1
  (p18 ph21):f1

;####################
;#  CP Back to 1H   #
;####################

  (p21 ph8):N
  (p13:spf13 pl11 ph9):N (p13 pl19 ph10):H

  0.5u pl3:N pl4:C     ; GARP power on 15N
  1u  cpds3:N cpds4:C cpds5:D

  (p3 pl2 ph11):H

#ifdef cmpd
  subr HRFDR_cmpd()
#else
	subr HRFDR_()
#endif	
  
  (p3 pl2 ph12):H

  go=Start ph31
  1m do:N do:C do:D

  30m mc #0 to Start
  	F1PH( ip3 & rd0 & rd30 & rp7, id10 & dd29)
		F2PH( ip7, id0 & dd30)
HaltAcqu, 1m

  30m H2_LOCK
  30m LOCKH_OFF
  30m LOCKDEC_OFF

exit

;#####################
;#  Phase Cycle, n>4 #
;#####################


ph0= 1 1				  ;H HY
ph1= 0 0 2 2		  ;H90 1
ph2= 0 0  				;Y HY
ph13= 1 1 2 2;Y180 (soft)
ph14= 1 1 1 1 2 2 2 2	;Y180 (hard)
ph3= 3 3				;Y901
ph4= 1 1				;Y902
ph5= 0 0 0 0 2 2 2 2	;Y YX
ph6= 0 0 				;X YX
ph7= 1 1				;X901
ph8= 1 3				;X902
ph9= 0 0				;X XH
ph10=1 1 1 1				;H XH
ph11=0 0				;H90 2
ph12=2 2 3 3				;H90 3

ph20= 0; sat
ph21= 1; sat2
ph22= 2
ph23= 0 1 0 1 1 0 1 0   ;RFDR (xy8)
ph24= 1 2 1 2 2 1 2 1   ;RFDR (xy8)

#ifdef s180
;ph31=	3 1 1 3 1 3 3 1 1 3 3 1 3 1 1 3
;      1 3 3 1 3 1 1 3 3 1 1 3 1 3 3 1; Rec
ph31= 1 3 2 0 1 3 2 0; Rec
#else
ph31= 1 3 0 2 3 1 2 0; Rec
#endif

;###############################################################
;PARAMETERS:
;p1      : C 90 at pl1
;p2      : C 180 at pl1
;p3      : H 90 at pl2
;p4      : H 180 at pl2
;p5      : H spinlock purge
;p10     : HC CP H pl20 C pl10
;p13     : NH CP H pl19 N pl11
;p16     : CN CP H pl13 C pl6 N pl7
;p18		 : 1H presat pl18
;p21     : N 90 pl21
;p22     : N 180 pl21
;d0      : initial t1 (3u)
;d1      : recycle delay
;d2      : total t1 ev time
;NS      : 2 * n
;DS      : >= 4
;pl1     : C 90/180 pwr level
;pl10		 : C HC cp pwr level
;pl16    : C CN cp pwr level
;pl4		 : C dec pwr level (not usually used)
;pl2     : H 90/180 pwr level
;pl13	   : H CN dec pwr level
;pl19    : H NH cp pwr level
;pl20    : H HC cp pwr level
;pl18    : H presat pwr level
;pl21    : N 90/180 pwr level
;pl17    : N CN cp pwr level
;pl11    : N NH cp pwr level
;l1      :  rotor periods for RFDR (x4; x8 for full compensation)  ;
;cnst29  : expected td1 for use in constant Duty
;cnst30  : expected td2 for use in constant Duty
;cnst31  : MAS Rate
;cpds3   : N dec cpdsprg3
;cpds4   : C dec cpdsprg4
;zgoptns : (-D) Pre, s180
