;hYcp

;##############################################################
;#                                                            #
;#          Spinlock Y (15N) to find R3 or T1_rho             #
;#                                                            #
;#    15N labeled systems: 1st minimum is 1*wr, 2nd min       #
;#     is 2*wr (increasing pwr) Only directly bonded Ns       #
;#        have a 1/2*wr minimum (HORROR condition)            #
;#                                                            #
;##############################################################

;Cross Polarization for Y channel (15N) with Spin Lock period
;written by WTF
;Avance II+ version

;$COMMENT= HN CP with N-spinlock
;$CLASS=Solids
;$DIM=1D
;$TYPE=CPMAS
;$SUBTYPE=Setup
;$OWNER=guest

define delay ONTIME
;prosol relations=<solids_cp>

;#include <Avancesolids.incl>
#include <N_detect_def.incl>

;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=1u*cnst11"
                            
			                ;##########################
;$EXTERN                    ;# Python insertion point #
                            ;##########################

Prepare, ze

;######################################################
;#               Protections: Pre-Check               #
;######################################################

"ONTIME=aq+p11+p16"

#include <Standard_Prot.incl>
        ;acquisition, CP time, PDSD/DARR, and echo restrictions
#include <ONTIME_prot.incl>
        ;total RF depsosition restriction

;######################################################
;#           Start of Active Pulse Program            #
;######################################################

Start, d1 do:H

                         (p3  pl2  ph1):H 
  (p11:spf1 pl11 ph2):N  (p11 pl19 ph0):H
  (p16      pl7  ph3):N  (p16 pl13 ph1):H 
  0.3u cpds2:H  ;decouple 1H during acquisition
  
;#######################################################
;#                     Acquisition                     #
;#######################################################
 
  go=Start ph31         
  1m do:H 
  30m mc #0 to Start F0(zd)
  
HaltAcqu, 1m
exit

ph0 = 0                ; H CP Spin lock
ph1 = 1 3              ; H Hard Pulse
ph2 = 0 0 2 2          ; X CP Spin Lock 
ph3 = 0 0 0 0 2 2 2 2  ; X Spin Lock
ph31= 0 2 2 0          ; receiver


;######################################################

;PARAMETERS: 
;p3      : H 90 at pl2
;p11     : H-N CP contact pl11 (f1) and sp1 (f2)
;p16     : SPIN LOCK duration after CP 
;sp1     : H CP pwr
;pl2     : H HP power level
;pl7     : N Spin Lock pwr -Dspinlock
;pl11    : N CP pwr 
;pl12    : H dec pwr
;pl13    : H alt dec pwr (Spinlock and CW)
;d1      : recycle delay
;d2      : H Inversion Recovery Time
;pcpd2   : pulse length in decoupling sequence
;cpdprg2 : cw, tppm (at pl12), or lgs, cwlg. cwlgs (LG-decoupling 
;spnam1  : use e.g. ramp.100 for variable amplitude CP
;zgoptns : (-D) DP, DPCP, p90, echo, spinlock, Hir, Hecho, lacq

